CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

IdentifyPrimaryObjects:[module_num:5|svn_version:'Unknown'|variable_revision_number:14|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:DNA
    Name the primary objects to be identified:large_mask
    Typical diameter of objects, in pixel units (Min,Max):50,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Display accepted local maxima?:No
    Select maxima color:Blue
    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Two classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:6|svn_version:'Unknown'|variable_revision_number:14|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:DNA
    Name the primary objects to be identified:small_mask
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Display accepted local maxima?:No
    Select maxima color:Blue
    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Two classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Minimum Cross-Entropy
